PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = forgetting_v1
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine welcome_screen
    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.027
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hi :)

        We are glad that you could spare some time to participate in our experiment. You will be asked learn the audio and object pair presented and then match them in testing. Please ensure that you are seated comfortably in front of your screen.

        If you have any questions about this study you may contact Chandrakant Harjpal(hchandrakant@iisc.ac.in) ,Prof. SP Arun (sparun @ iisc.ac.in), Centre for Neuroscience or Prof. Sriram Ganapathy(sriramg@iisc.ac.in), Electrical Engineering Department, IISc.

        Your participation in this study is voluntary. You may stop the task at any time if you do not wish to proceed. Your decision to withdraw will not affect your relations with your institute/university in any way. You are encouraged to ask questions about this study at any time. All your information and data collected will be kept completely confidential. No reference will be made in written or oral materials that could link you to this study.


        PARTICIPANT CONSENT
        I understand what is required of me, and all my questions have been answered. I now hereby give my consent of my own free will to participate in this experiment.

        Press SPACE to continue, else
        Press ESCAPE to exit
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_instructions
    TextComponent task_inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Task Instructions

        There will be multiple blocks within the experiment.

        In each block an object and a corresponding word will be played in training block. You have to memorise the object-word pair. Each block contains 10 such pairs.

        You can replay the audio as many times as like and look at the image as long as you want but you can't go back to a image-audio pair.

        After each training block there will be a test for some pairs of the object-word shown, the rest of the pairs will be tested after all training blocks are over.

        Test details-  A word will be played and you have to choose correct object corresponding by pressing key shown below the image.

        Object images would be different in training and testing but the identity would be same, for example color change, rotation could be there but object shape would be same.

        Similary for audio - accent, gender of voice could be different but word will be same.

        Press 'Space' to start practice block
    KeyboardComponent task_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AudioCheck
    TextComponent audio_check_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please ensure that your speakers are working and are set at a comfortable volume.

        Press SPACE if you were able to hear the sound at a comfortable volume.

        If not, modify the volume of your speaker. Press R to hear it again. Press SPACE when you are comfortable with the volume.
    KeyboardComponent AudioResp
      allowedKeys = 'r','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent audio_check_sound
      sound = audios/kinch_0.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    CodeComponent audio_check_code
      Code Type = Auto->JS
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      End Routine:
        if 'space' in AudioResp.keys:
            audio_check_reps.finished = True
  Routine practice_info
    TextComponent practice_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice block

        Here, you will have to learn only two object-spoken word pairs. The image and audio will play simultaneously, you can look at image as long as you want and replay audio as many times as you want but can't go back.

        Press Space to start practice block
    KeyboardComponent practice_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi_fixation_cross
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine experiment_information
    TextComponent main_exp_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Main Experiment Blocks

        This is the main experiment. Here you will hear 10 image-audio pairs in each subblock.

        After these 10 trials in a subblock you will be tested on some of the pairs. Rest of the pairs you will be tested on after all blocks are over.

        Press SPACE to start the experiment
    KeyboardComponent main_exp_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_info
    TextComponent block_info_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = To start next block press 'SPACE'
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    KeyboardComponent block_info_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_trial
    ImageComponent train_image
      image [set every repeat] = $image_train
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_train
      sound [set every repeat] = $audio_train
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    TextComponent train_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'R' to repeat the sound and 'Z' to go to next trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      End Routine:
        if 'z' in train_resp.keys:
            train_repeat.finished = True

        # QUIT the block if Q pressed
        if 'q' in train_resp.keys:
            train_repeat.finished = True
            train_loop.finished = True
            continueRoutine     = False
            exitFlag            = 1
    KeyboardComponent train_resp
      allowedKeys = 'r','z','q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_train_trial
    ImageComponent train_image_2
      image [set every repeat] = $image_train
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_train_2
      sound [set every repeat] = $audio_train
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    TextComponent train_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'R' to repeat the sound and 'Z' to go to next trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if 'z' in practice_train_resp.keys:
            practice_train_reps.finished = True
    KeyboardComponent practice_train_resp
      allowedKeys = 'z','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_ir_test_info
    TextComponent prac_ir_test_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice Test block: Image retrieval

        You will now hear an audio word and you must choose the correct image using the digit keys on the keyboard

        Press 'Space' to start
    KeyboardComponent prac_ir_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_ir_test_trial
    SoundComponent ir_prac_sound
      sound [set every repeat] = $audio_test
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    ImageComponent ir_prac_i1
      image [set every repeat] = $image_test1
      pos = (-0.35, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent ir_prac_i2
      image [set every repeat] = $image_test2
      pos = (0.35, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent ir_prac_resp
      allowedKeys = '1','2','r','num_1','num_2'
      correctAns = $corr_Ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent ir_prac_code
      Code Type = Auto->JS
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      End Routine:
        if '1' in ir_prac_resp.keys:
            practice_ir_loop.finished = True

        if '2' in ir_prac_resp.keys:
            practice_ir_loop.finished = True

        number = ir_prac_resp.keys[-1]

        if number == str(corr_Ans):
            msg="Correct!"
        else:
            msg="Oops! That was wrong"
    TextComponent ir_prac_pos2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.35, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent ir_prac_pos1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.35, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent ir_prac_replay_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'R' to replay the sound
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  Routine prac_ir_feedback
    TextComponent ir_prac_feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine ir_test_trial_curr
    ImageComponent test_image_1
      image [set every repeat] = $image_test2
      pos = (-0.375, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_2
      image [set every repeat] = $image_test3
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3
      image [set every repeat] = $image_test4
      pos = (0.375, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_4
      image [set every repeat] = $image_test5
      pos = (0.75, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_5
      image [set every repeat] = $image_test6
      pos = (-0.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_6
      image [set every repeat] = $image_test7
      pos = (-0.375, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_7
      image [set every repeat] = $image_test8
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_8
      image [set every repeat] = $image_test9
      pos = (0.375, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_9
      image [set every repeat] = $image_test10
      pos = (0.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_0
      image [set every repeat] = $image_test1
      pos = (-0.75, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent pos_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent pos_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent pos_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent pos_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent pos_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent pos_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent pos_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent pos_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent pos_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent pos_0
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    SoundComponent test_sound_ir
      sound [set every repeat] = $audio_test
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_test
      allowedKeys = '1','2','3','4','5','r','0','6','7','8','9','p','q','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      correctAns = $corrAns_ir
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_ir_test_curr
      Code Type = Auto->JS
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      End Routine:
        if '1' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '2' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '3' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '4' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '5' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '6' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '7' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '8' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '9' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '0' in key_resp_test.keys:
            image_test_repeat.finished = True

        number = key_resp_test.keys[-1]

        if number == str(corrAns_ir):
            correct_ir =1
        else:
            correct_ir =0

        ir_block_corr = ir_block_corr+correct_ir

        thisExp.addData('corr_ir_trial',correct_ir)
        thisExp.addData('corr_ir_block',ir_block_corr)
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      End Routine:
        # QUIT the block if Q pressed
        if 'q' in key_resp_test.keys:
            ir_test_loop.finished = True
            image_test_repeat.finished = True
            continueRoutine     = False
            exitFlag            = 1
    TextComponent replay_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Press 'R' to replay the sound
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  Routine ir_test_ins_curr
    TextComponent ir_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test Block

        Here you will hear one of the words you learned, and have to choose the object image that was paired with it. You have to click the corresponding digit from keyboard.

        You can press 'R' to repeat the sound

        Press 'SPACE' to start
    KeyboardComponent ir_ins_resp
      allowedKeys = 'space','p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent ir_ins_curr_code
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        ir_block_corr = 0
  Routine test_all_sessions
    TextComponent main_exp_ins_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test Blocks

        Now you will be tested on all the stimulis seen till now from all the blocks.

        Press SPACE to start
    KeyboardComponent main_exp_ins_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ir_test_trial_all
    ImageComponent test_image
      image [set every repeat] = $image_test2
      pos = (-0.375, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_10
      image [set every repeat] = $image_test3
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_11
      image [set every repeat] = $image_test4
      pos = (0.375, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_12
      image [set every repeat] = $image_test5
      pos = (0.75, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_13
      image [set every repeat] = $image_test6
      pos = (-0.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_14
      image [set every repeat] = $image_test7
      pos = (-0.375, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_15
      image [set every repeat] = $image_test8
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_16
      image [set every repeat] = $image_test9
      pos = (0.375, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_17
      image [set every repeat] = $image_test10
      pos = (0.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_18
      image [set every repeat] = $image_test1
      pos = (-0.75, 0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent pos
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent pos_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent pos_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent pos_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent pos_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent pos_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent pos_15
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent pos_16
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent pos_17
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent pos_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    SoundComponent test_sound_ir_2
      sound [set every repeat] = $audio_test
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_test_all
      allowedKeys = '1','2','3','4','5','r','0','6','7','8','9','p','q','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      correctAns = $corrAns_ir
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_ir_test_curr_2
      Code Type = Auto->JS
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      End Routine:
        if '1' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '2' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '3' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '4' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '5' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '6' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '7' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '8' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '9' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        if '0' in key_resp_test_all.keys:
            image_test_rep2.finished = True

        number = key_resp_test_all.keys[-1]

        if number == str(corrAns_ir):
            correct_ir =1
        else:
            correct_ir =0

        ir_block_corr = ir_block_corr+correct_ir

        thisExp.addData('corr_ir_trial',correct_ir)
        thisExp.addData('corr_ir_block',ir_block_corr)
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      End Routine:
        # QUIT the block if Q pressed
        if 'q' in key_resp_test_all.keys:
            image_test_rep2.finished = True
            ir_test_all_loop.finished = True
            continueRoutine     = False
            exitFlag            = 1
  Routine ir_test_ins_all
    TextComponent ir_ins_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent ir_ins_curr_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        ir_block_corr = 0
Flow
  Routine welcome_screen
  LoopInitiator audio_check_reps loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine AudioCheck
  LoopTerminator audio_check_reps
  Routine practice_info
  LoopInitiator practice_train_loop loopType="TrialHandler"
    conditionsFile = practice_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_train': 'images/2031.jpeg', 'audio_train': 'audios/heach_0.wav'},
      {'image_train': 'images/2043.jpeg', 'audio_train': 'audios/smope_0.wav'}]
    Routine isi_fixation_cross
    LoopInitiator practice_train_reps loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine practice_train_trial
    LoopTerminator practice_train_reps
  LoopTerminator practice_train_loop
  Routine practice_ir_test_info
  LoopInitiator practice_ir_block loopType="TrialHandler"
    conditionsFile = practice_ir_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'audio_test': 'audios/smope_1.wav', 'image_test1': 'images/2031.jpeg', 'image_test2': 'images/2043.jpeg', 'corr_Ans': 2},
      {'audio_test': 'audios/heach_1.wav', 'image_test1': 'images/2031.jpeg', 'image_test2': 'images/2043.jpeg', 'corr_Ans': 1}]
    Routine isi_fixation_cross
    LoopInitiator practice_ir_loop loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine prac_ir_test_trial
    LoopTerminator practice_ir_loop
    Routine prac_ir_feedback
  LoopTerminator practice_ir_block
  Routine experiment_information
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = curr_test_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'train_conds_file': 'conditions_files/block1_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block1.xlsx'},
      {'train_conds_file': 'conditions_files/block2_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block2.xlsx'},
      {'train_conds_file': 'conditions_files/block3_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block3.xlsx'},
      {'train_conds_file': 'conditions_files/block4_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block4.xlsx'},
      {'train_conds_file': 'conditions_files/block5_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block5.xlsx'},
      {'train_conds_file': 'conditions_files/block6_train.xlsx', 'ir_test_conds_file': 'conditions_files/curr_test_block6.xlsx'}]
    Routine block_info
    LoopInitiator train_loop loopType="TrialHandler"
      conditionsFile = $train_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      LoopInitiator train_repeat loopType="TrialHandler"
        loopType = random
        nReps = 50
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        Routine train_trial
      LoopTerminator train_repeat
    LoopTerminator train_loop
    Routine ir_test_ins_curr
    LoopInitiator ir_test_loop loopType="TrialHandler"
      conditionsFile = $ir_test_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      LoopInitiator image_test_repeat loopType="TrialHandler"
        loopType = random
        nReps = 50
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        Routine ir_test_trial_curr
      LoopTerminator image_test_repeat
    LoopTerminator ir_test_loop
  LoopTerminator block_loop
  Routine test_all_sessions
  LoopInitiator all_test_block loopType="TrialHandler"
    conditionsFile = last_test_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ir_conds_file': 'conditions_files/last_test_block1.xlsx'},
      {'ir_conds_file': 'conditions_files/last_test_block2.xlsx'},
      {'ir_conds_file': 'conditions_files/last_test_block3.xlsx'},
      {'ir_conds_file': 'conditions_files/last_test_block4.xlsx'},
      {'ir_conds_file': 'conditions_files/last_test_block5.xlsx'},
      {'ir_conds_file': 'conditions_files/last_test_block6.xlsx'}]
    Routine ir_test_ins_all
    LoopInitiator ir_test_all_loop loopType="TrialHandler"
      conditionsFile = $ir_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      LoopInitiator image_test_rep2 loopType="TrialHandler"
        loopType = random
        nReps = 50
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        Routine ir_test_trial_all
      LoopTerminator image_test_rep2
    LoopTerminator ir_test_all_loop
  LoopTerminator all_test_block
