PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['practice_ar_test.xlsx', 'practice_ir_test.xlsx', 'practice_train.xlsx', 'block_conditions_ai_gA.xlsx', 'block_conditions_ai_gB.xlsx', 'block_conditions_ia_gA.xlsx', 'block_conditions_ia_gB.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = multimodal_learning_v1
  keyboardBackend = ioHub
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Routines
  Routine train_instruction
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Press 'R' to repeat the sound and 'Z' to go to next trial
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  Routine welcome
    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.027
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hi :)

        We are glad that you could spare some time to participate in our experiment. You will be asked learn the audio and object pair presented and then match them in testing. Please ensure that you are seated comfortably in front of your screen.

        If you have any questions about this study you may contact Chandrakant Harjpal(hchandrakant@iisc.ac.in) ,Prof. SP Arun (sparun @ iisc.ac.in), Centre for Neuroscience or Prof. Sriram Ganapathy(sriramg@iisc.ac.in), Electrical Engineering Department, IISc.

        Your participation in this study is voluntary. You may stop the task at any time if you do not wish to proceed. Your decision to withdraw will not affect your relations with your institute/university in any way. You are encouraged to ask questions about this study at any time. All your information and data collected will be kept completely confidential. No reference will be made in written or oral materials that could link you to this study.


        PARTICIPANT CONSENT
        I understand what is required of me, and all my questions have been answered. I now hereby give my consent of my own free will to participate in this experiment.

        Press SPACE to continue, else
        Press ESCAPE to exit
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ir_test_instruction
    TextComponent ir_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Test Block: Image retrieval

        Here you will hear one of the words you learned, and have to choose the image that was paired with it.

        You can press 'R' to repeat the sound

        Press 'SPACE' to start
    KeyboardComponent ir_ins_resp
      allowedKeys = 'space','p','q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
  Routine ir_test_instruction_loop
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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      text:
        Be ready

        Press corresponding digit key to correct image
  Routine ir_test_trial
    ImageComponent test_image_1
      image [set every repeat] = $image_test1
      pos = (-0.75, 0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_2
      image [set every repeat] = $image_test2
      pos = (-0.375, 0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $audio_test
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp_test
      allowedKeys = '1','2','3','4','5','r','0','6','7','8','9','p','q','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      correctAns = $corrAns_ir
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if '1' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '2' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '3' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '4' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '5' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '6' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '7' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '8' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '9' in key_resp_test.keys:
            image_test_repeat.finished = True

        if '0' in key_resp_test.keys:
            image_test_repeat.finished = True
    ImageComponent test_image_3
      image [set every repeat] = $image_test3
      pos = (0, 0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_4
      image [set every repeat] = $image_test4
      pos = (0.375, 0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_5
      image [set every repeat] = $image_test5
      pos = (0.75, 0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_6
      image [set every repeat] = $image_test6
      pos = (-0.75, -0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_7
      image [set every repeat] = $image_test7
      pos = (-0.375, -0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_8
      image [set every repeat] = $image_test8
      pos = (0, -0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_9
      image [set every repeat] = $image_test9
      pos = (0.375, -0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_10
      image [set every repeat] = $image_test10
      pos = (0.75, -0.25)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    TextComponent pos0
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent pos1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent pos2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent pos3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent pos4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent pos5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent pos6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent pos7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent pos8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.375, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent pos9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.75, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    CodeComponent ir_test_code2
      Code Type = Both
      Begin JS Routine:
        exitFlag = 0
        isPaused = 0
      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      Each JS Frame:
        if ((exitFlag === 1)) {
            continueRoutine = false;
        }
      End JS Routine:
        // GET selected response key
        response = key_resp_test.keys;

        // PAUSE the trial if P pressed
        if ((response === 'p')) {
            isPaused = 1;
        }

        // QUIT the block if Q pressed
        if ((response === 'q')) {
            ir_test_loop.finished = true
            image_test_repeat.finished = true
            continueRoutine = false;
            exitFlag        = 1;
        }
      End Routine:
        # GET selected response key
        response = key_resp_test.keys

        # PAUSE the trial if P pressed
        if 'p' in response:
            isPaused = 1;

        # QUIT the block if Q pressed
        if 'q' in response:
            ir_test_loop.finished = True
            image_test_repeat.finished = True
            continueRoutine     = False
            exitFlag            = 1
    TextComponent ir_press_r
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press 'R' to repeat the sound
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  Routine block_information
    TextComponent block_ins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To start next block press 'SPACE'
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    KeyboardComponent block_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ar_test_instruction
    TextComponent ar_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Test block: Audio retrieval

        You will be shown and object and you have to choose correct audio paired with it

        You have to use digit keys to listen to different sounds and choose a sound by pressing 'Z'. Pressing 'Z' will select the last listened sound.

        Audio are randomized in each trial, i.e. -Audio 1 would be different in each trial

        Audio options will be present on right side, after you have heard the sound color will become Red.

        You can listen to same sound multiple times.

        Press 'SPACE' to start
    CodeComponent ar_ins_code
      Code Type = Auto->JS
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      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
    KeyboardComponent ar_ins_resp
      allowedKeys = 'space','p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine key_response_routine
    ImageComponent ar_test_image
      image [set every repeat] = $image_test
      pos = (0, 0.1)
      saveStartStop = False
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent ar_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','z','q','p','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      correctAns = $corrAns_ar
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        skip_sound =0
      End Routine:
        if '0' in ar_key_resp.keys:
            soundfile = audio_test1
            text_color0= "Red"

        if '1' in ar_key_resp.keys:
            soundfile = audio_test2
            text_color1= "Red"

        if '2' in ar_key_resp.keys:
            soundfile = audio_test3
            text_color2= "Red"

        if '3' in ar_key_resp.keys:
            soundfile = audio_test4
            text_color3= "Red"

        if '4' in ar_key_resp.keys:
            soundfile = audio_test5
            text_color4= "Red"

        if '5' in ar_key_resp.keys:
            soundfile = audio_test6
            text_color5= "Red"

        if '6' in ar_key_resp.keys:
            soundfile = audio_test7
            text_color6= "Red"

        if '7' in ar_key_resp.keys:
            soundfile = audio_test8
            text_color7= "Red"

        if '8' in ar_key_resp.keys:
            soundfile = audio_test9
            text_color8= "Red"

        if '9' in ar_key_resp.keys:
            soundfile = audio_test10
            text_color9= "Red"

        if 'z' in ar_key_resp.keys:
            image_reps.finished = True
            skip_sound =1

        if 'q' in ar_key_resp.keys:
            skip_sound =1
    TextComponent ar_text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 0-9 to listen to corresponding audio
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    TextComponent ar_text2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.55,0.25)
      startVal [time (s)] = 0.0
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      text:
        Sound options
    TextComponent pos_1
      color [set every repeat] = $text_color1
      letterHeight = 0.05
      pos = (0.5, 0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent pos_2
      color [set every repeat] = $text_color2
      letterHeight = 0.05
      pos = (0.5, 0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent pos_3
      color [set every repeat] = $text_color3
      letterHeight = 0.05
      pos = (0.5,- 0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent pos_4
      color [set every repeat] = $text_color4
      letterHeight = 0.05
      pos = (0.5, -0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent pos_5
      color [set every repeat] = $text_color5
      letterHeight = 0.05
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent pos_6
      color [set every repeat] = $text_color6
      letterHeight = 0.05
      pos = (0.6, 0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent pos_7
      color [set every repeat] = $text_color7
      letterHeight = 0.05
      pos = (0.6, 0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent pos_8
      color [set every repeat] = $text_color8
      letterHeight = 0.05
      pos = (0.6, -0.04)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent pos_9
      color [set every repeat] = $text_color9
      letterHeight = 0.05
      pos = (0.6, -0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent pos_0
      color [set every repeat] = $text_color0
      letterHeight = 0.05
      pos = (0.5, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    CodeComponent ar_code2_2
      Code Type = Both
      Begin JS Routine:
        exitFlag = 0
        isPaused = 0
      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      Each JS Frame:
        if ((exitFlag === 1)) {
            continueRoutine = false;
        }
      End JS Routine:
        // GET selected response key
        response = ar_key_resp.keys;

        // PAUSE the trial if P pressed
        if ((response === 'p')) {
            isPaused = 1;
        }

        // QUIT the block if Q pressed
        if ((response === 'q')) {
            ar_test_loop.finished = true
            image_reps.finished = true
            continueRoutine = false;
            exitFlag        = 1;
        }
      End Routine:
        # GET selected response key
        response = ar_key_resp.keys

        # PAUSE the trial if P pressed
        if 'p' in response:
            isPaused = 1;

        # QUIT the block if Q pressed
        if 'q' in response:
            ar_test_loop.finished = True
            image_reps.finished = True
            continueRoutine     = False
            exitFlag            = 1
    TextComponent ar_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Press Z to select sound ' + str(sound_number)
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  Routine sound_routine
    SoundComponent ar_sound
      saveStartStop = False
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.1
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    CodeComponent ar_code2
      Code Type = Auto->JS
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      Begin Routine:
        number = ar_key_resp.keys[-1]
        sound_number = str(number)
        correct = str(corrAns_ar)

        if skip_sound == 1:
            continueRoutine = False
    TextComponent ar_text_key
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $'Audio ' + str(sound_number) + ' is playing'
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    ImageComponent ar_image
      image [set every repeat] = $image_test
      pos = (0, 0.1)
      saveStartStop = False
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine isi_fixation_cross
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine practice_information
    TextComponent prac_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice block

        Here, you will have to learn only two object-spoken word pairs. The image and audio will play simultaneously unlike the actual experiment where they may be a delay.

        Press 'Space' to continue
    KeyboardComponent prac_ins_resp
      allowedKeys = 'space','q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_audio_train
    SoundComponent prac_sound
      saveStartStop = False
      sound [set every repeat] = $audio_train
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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    ImageComponent prac_image
      image [set every repeat] = $image_train
      saveStartStop = False
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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  Routine practice_ir_test_info
    TextComponent prac_ir_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice Test block: Image retrieval

        You will now hear an audio word and you must choose the correct image using the digit keys on the keyboard

        Press 'Space' to start
    KeyboardComponent prac_ir_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_ar_test_info
    TextComponent prac_ar_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice Test block: Audio retrieval

        You will be shown and object and you have to choose correct audio paired with it

        You have to use digit keys to listen to different sounds and choose a sound by pressing 'Z'

        Audio are randomized in each trial, i.e. -Audio 1 would be different in each trial

        Audio options will be present on right side, after you have heard the sound color will become Red.

        You can listen to same sound multiple times.

        Press 'SPACE' to start
    KeyboardComponent prac_ar_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_ir_test
    SoundComponent ir_prac_sound
      saveStartStop = False
      sound [set every repeat] = $audio_test
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    ImageComponent ir_prac_i1
      image [set every repeat] = $image_test1
      pos = (-0.35, 0.1)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent ir_prac_i2
      image [set every repeat] = $image_test2
      pos = (0.35, 0.1)
      saveStartStop = False
      size = (5*x_scale, 5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent ir_prac_resp
      allowedKeys = '1','2','r'
      correctAns = $corr_Ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent ir_prac_code
      Code Type = Auto->JS
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      End Routine:
        if '1' in ir_prac_resp.keys:
            practice_ir_loop.finished = True

        if '2' in ir_prac_resp.keys:
            practice_ir_loop.finished = True

        if ir_prac_resp.corr:
            msg="Correct!"
        else:
            msg="Oops! That was wrong"
    TextComponent ir_prac_pos1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.35, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent ir_prac_pos2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.35, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent ir_prac_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'R' to repeat the sound
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  Routine practice_ar_key_response
    ImageComponent prac_ar_image
      image [set every repeat] = $image_test
      pos = (0, 0.1)
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_ar_resp
      allowedKeys = '1','2','z','num_1','num_2'
      correctAns = $corr_Ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent prac_ar_code
      Code Type = Auto->JS
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      Begin Routine:
        skip_sound_1 = 0
      End Routine:
        if '1' in prac_ar_resp.keys:
            soundfile = audio_test1
            text_color11 = "Red"

        if '2' in prac_ar_resp.keys:
            soundfile = audio_test2
            text_color12 = "Red"

        if 'z' in prac_ar_resp.keys:
            practice_ar_loop.finished = True
            skip_sound_1 =1
    TextComponent prac_ar_text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 1-2 to listen to corresponding audio
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    TextComponent prac_ar_text2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.55, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sound options
    TextComponent pos_11
      color [set every repeat] = $text_color11
      letterHeight = 0.05
      pos = (0.5, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent prac_ar_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Press Z to select sound ' + str(sound_number)
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    TextComponent pos_12
      color [set every repeat] = $text_color12
      letterHeight = 0.05
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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  Routine practice_ir_feedback
    TextComponent ir_prac_feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine practice_ar_feedback
    TextComponent prac_ar_feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine experiment_information
    TextComponent main_block_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Main Block

        This is the main experiment. Here you will hear 10 image-audio pairs with a delay between the image and audio (either could be first)

        After these 10 trials you will be tested - you will see an image and you have to match it to the audio or you will hear an audio and you will have to find the correct image


        Press 'SPACE' to start
    KeyboardComponent main_block_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine soa_train
    ImageComponent train_image
      image [set every repeat] = $image_train
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = $image_onset
      stopVal [duration (s)] = 0.5
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    SoundComponent train_sound
      sound [set every repeat] = $audio_train
      startVal [time (s)] = $audio_onset
      stopVal [duration (s)] = 1.0
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    ImageComponent icon_image
      image = images/sound_icon.png
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = $audio_onset
      stopVal [duration (s)] = 1.0
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    CodeComponent train_code
      Code Type = Both
      Begin JS Routine:
        // INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
        isPaused = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      Each JS Frame:
        if ((exitFlag === 1)) {
            continueRoutine = false;
        }
      End JS Routine:
        // GET selected response key
        response = train_resp.keys;

        // PAUSE the trial if P pressed
        if ((response === 'p')) {
            isPaused = 1;
        }

        // QUIT the block if Q pressed
        if ((response === 'q')) {
            trials.finished = true
            continueRoutine = false;
            exitFlag        = 1;
        }
      End Routine:
        # GET selected response key
        response = train_resp.keys

        # PAUSE the trial if P pressed
        if 'p' in response:
            isPaused = 1;

        # QUIT the block if Q pressed
        if 'q' in response:
            trials.finished = True
            continueRoutine     = False
            exitFlag            = 1
    KeyboardComponent train_resp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine main_train_information
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Main training block - Now you have to memorise the image-audio pair shown, each pair is seperated by a fixation cross and also you have to press 'space' to go to next pair.

        To start main train block press space
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_sound
    ImageComponent prac_ar_image2
      image [set every repeat] = $image_test
      pos = (0, 0.1)
      saveStartStop = False
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        number = prac_ar_resp.keys[-1]
        sound_number = str(number)
        correct = str(corr_Ans)


        if skip_sound_1 == 1:
            continueRoutine = False
      End Routine:
        if '1' in number:
            if number == correct:
                msg = "Correct"
            else:
                msg = "Oops! That was wrong"

        if '2' in number:
            if number == correct:
                msg = "Correct"
            else:
                msg = "Oops! That was wrong"
    TextComponent prac_ar_key_info
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Audio ' + str(sound_number) + ' is playing'
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    SoundComponent prac_ar_sound
      saveStartStop = False
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine press_space
    TextComponent space_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'SPACE' to go to next trial
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    KeyboardComponent press_space_resp
      allowedKeys = 'space','q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        exitFlag = 0
      Begin Routine:
        # INITIALIZE variables
        exitFlag = 0
      Each Frame:
        if exitFlag == 1:
            continueRoutine = False
      Each JS Frame:
        if ((exitFlag === 1)) {
            continueRoutine = false;
        }
      End JS Routine:
        // GET selected response key
        response = press_space_resp.keys;

        // QUIT the block if Q pressed
        if ((response === 'q')) {
            trials.finished = true
            continueRoutine = false;
            exitFlag        = 1;
        }
      End Routine:
        # GET selected response key
        response = press_space_resp.keys

        # QUIT the block if Q pressed
        if 'q' in response:
            trials.finished = True
            continueRoutine     = False
            exitFlag            = 1
  Routine task_instructions
    TextComponent task_ins_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.027
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There will be multiple blocks within the experiment.

        In each block an object and a corresponding word will be played in training block. You have to memorise the object-word pair. Each block contains 10 such pairs.

        After that there will be two tests
        1) A word will be played and you have to choose correct object corresponding by pressing key 0-9
        2) An object will be shown and you have to choose correct audio corresponding to object.

        Object images would be different in training and testing but the identity would be same, for example color change, rotation could be there but object shape would be same.

        Similary for audio - accent, gender of voice could be different but word will be same.

        Press 'Space' to start practice block
    KeyboardComponent task_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent clear_events
      Code Type = Auto->JS
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      End Routine:
        event.clearEvents()
  Routine two_sample_trials
    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Two sample trials will be presented giving an idea of delay in this block

        Press 'Space' to start
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AudioCheck
    CodeComponent audio_check_code
      Code Type = Auto->JS
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      End Routine:
        if 'space' in AudioResp.keys:
            audioCheckReps.finished = True
    TextComponent AudioCheck_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.027
      startVal [time (s)] = 0.0
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      text:
        Please ensure that your speakers are working and are set at a comfortable volume.

        Press SPACE if you were able to hear the sound at a comfortable volume.

        If not, modify the volume of your speaker. Press R to hear it again. Press SPACE when you are comfortable with the volume.
    KeyboardComponent AudioResp
      allowedKeys = 'r','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent audio_check_sound
      saveStartStop = False
      sound = audios/kinch_0.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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  Routine getScaling
    CodeComponent getScaleCodeJS
      Code Type = JS
      Begin JS Experiment:
        event   = psychoJS.eventManager;
        thisExp = psychoJS.experiment;
        win     = psychoJS.window;

        roundF = function (a){
            return Math.round(a);
        }
    CodeComponent getScaleCodeBoth
      Code Type = Both
      Begin Experiment:
        oldt = 0
        x_size = 12.3
        y_size = 7.7
        screen_height = 0

        if win.units == 'norm':
            x_scale = .05
            y_scale = .1
            dbase = .0001
            unittext = ' norm units'
            vsize = 2
        elif win.units == 'pix':
            x_scale = 60
            y_scale = 40
            dbase = .1
            unittext = ' pixels'
            vsize = win.size[1]
        else:
            x_scale = .05
            y_scale = .05
            dbase = .0001
            unittext = ' height units'
            vsize = 1
      Begin JS Experiment:
        oldt = 0;
        x_size = 12.3;
        y_size = 7.7;
        screen_height = 0;
        if ((win.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((win.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = win.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if t-oldt < .5:
                dscale = 5*dbase
                oldt = t
            else:
                dscale = dbase
                oldt = t
            if 'space' in keys:
                continueRoutine = False
            elif 'up' in keys:
                y_scale = round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale = round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale = round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale = round((x_scale+dscale)*10000)/10000
            screen_height = round(vsize*10/y_scale)/10
            getScaleImage.size = [x_size*x_scale, y_size*y_scale]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if (_pj.in_es6("space", keys)) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (roundF(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (roundF(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (roundF(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (roundF(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            screen_height = (roundF(((vsize * 10) / y_scale)) / 10);
            getScaleImage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        thisExp.addData("xScale", x_scale);
        thisExp.addData("yScale", y_scale);
      End Routine:
        thisExp.addData('xScale',x_scale)
        thisExp.addData('yScale',y_scale)
    KeyboardComponent getScaleResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent getScaleTextTop
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Resize the image below using the cursor keys to match the width and height of your ATM card.

        Up for taller, DOWN for shorter
        LEFT for narrower, RIGHT for wider
    TextComponent getScaleTextBottom
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACE when done
      wrapWidth = 1.5
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    ImageComponent getScaleImage
      color = -1.0000, -1.0000, -1.0000
      image = images/atm_card_black.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine pause
    CodeComponent pauseCode
      Code Type = Auto->JS
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      Begin Routine:
        if isPaused == 0:
            continueRoutine = False
      End Routine:
        isPaused = 0;
    TextComponent pauseTxt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experiment Paused

        Press 'SPACE' to continue
    KeyboardComponent pauseResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_sound2
    ImageComponent prac_ar_image2_2
      image [set every repeat] = $image_test
      saveStartStop = False
      size = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent prac_ar_resp2_2
      allowedKeys = 'z'
      correctAns = $corr_Ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if 'z' in prac_ar_resp2_2.keys:
            practice_ar_loop.finished = True
    TextComponent prac_ar_key_info_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Audio ' + str(prac_ar_resp.keys) + ' is playing'
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    SoundComponent prac_ar_sound_2
      saveStartStop = False
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent prac_ar_text3_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Press 'Z' to choose the sound 
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  Routine press_space_prac
    TextComponent space_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'SPACE' to go to next trial
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    KeyboardComponent press_space_resp_2
      allowedKeys = 'space','q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine set_color_ar
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        text_color0 = "Black"
        text_color1 = "Black"
        text_color2 = "Black"
        text_color3 = "Black"
        text_color4 = "Black"
        text_color5 = "Black"
        text_color6 = "Black"
        text_color7 = "Black"
        text_color8 = "Black"
        text_color9 = "Black"

        sound_number = '   '
  Routine set_color_prac
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        text_color11 = "Black"
        text_color12 = "Black"


        sound_number = '   '
        msg = '....'
Flow
  Routine welcome
  Routine task_instructions
  Routine getScaling
  LoopInitiator audioCheckReps loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine AudioCheck
  LoopTerminator audioCheckReps
  Routine practice_information
  LoopInitiator practice_train_block loopType="TrialHandler"
    conditionsFile = practice_train.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_train': 'images/2031.jpg', 'audio_train': 'audios/heach_0.wav'},
      {'image_train': 'images/2043.jpg', 'audio_train': 'audios/smope_0.wav'}]
    Routine isi_fixation_cross
    Routine practice_audio_train
    Routine press_space_prac
  LoopTerminator practice_train_block
  Routine practice_ir_test_info
  LoopInitiator practice_ir_block loopType="TrialHandler"
    conditionsFile = practice_ir_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'audio_test': 'audios/smope_1.wav', 'image_test1': 'images/2031.jpg', 'image_test2': 'images/2043.jpg', 'corr_Ans': 2},
      {'audio_test': 'audios/heach_1.wav', 'image_test1': 'images/2031.jpg', 'image_test2': 'images/2043.jpg', 'corr_Ans': 1}]
    Routine isi_fixation_cross
    LoopInitiator practice_ir_loop loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine practice_ir_test
    LoopTerminator practice_ir_loop
    Routine practice_ir_feedback
  LoopTerminator practice_ir_block
  Routine practice_ar_test_info
  LoopInitiator practice_ar_block loopType="TrialHandler"
    conditionsFile = practice_ar_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_test': 'images/2031.jpg', 'audio_test1': 'audios/heach_0.wav', 'audio_test2': 'audios/smope_0.wav', 'corr_Ans': 1},
      {'image_test': 'images/2043.jpg', 'audio_test1': 'audios/heach_0.wav', 'audio_test2': 'audios/smope_0.wav', 'corr_Ans': 2}]
    Routine isi_fixation_cross
    Routine set_color_prac
    LoopInitiator practice_ar_loop loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine practice_ar_key_response
      Routine practice_sound
    LoopTerminator practice_ar_loop
    Routine practice_ar_feedback
  LoopTerminator practice_ar_block
  Routine experiment_information
  LoopInitiator n_shot_block_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practice_conds_file': 'conditions_files/block1_practice.xlsx', 'train_conds_file': 'conditions_files/block1_train.xlsx', 'ir_test_conds_file': 'conditions_files/block1_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block1_ar_test.xlsx'},
      {'practice_conds_file': 'conditions_files/block2_practice.xlsx', 'train_conds_file': 'conditions_files/block2_train.xlsx', 'ir_test_conds_file': 'conditions_files/block2_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block2_ar_test.xlsx'},
      {'practice_conds_file': 'conditions_files/block3_practice.xlsx', 'train_conds_file': 'conditions_files/block3_train.xlsx', 'ir_test_conds_file': 'conditions_files/block3_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block3_ar_test.xlsx'},
      {'practice_conds_file': 'conditions_files/block4_practice.xlsx', 'train_conds_file': 'conditions_files/block4_train.xlsx', 'ir_test_conds_file': 'conditions_files/block4_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block4_ar_test.xlsx'},
      {'practice_conds_file': 'conditions_files/block5_practice.xlsx', 'train_conds_file': 'conditions_files/block5_train.xlsx', 'ir_test_conds_file': 'conditions_files/block5_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block5_ar_test.xlsx'},
      {'practice_conds_file': 'conditions_files/block6_practice.xlsx', 'train_conds_file': 'conditions_files/block6_train.xlsx', 'ir_test_conds_file': 'conditions_files/block6_ir_test.xlsx', 'ar_test_conds_file': 'conditions_files/block6_ar_test.xlsx'}]
    Routine block_information
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $train_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      Routine soa_train
      Routine pause
      Routine press_space
    LoopTerminator trials
    Routine ir_test_instruction
    LoopInitiator ir_test_loop loopType="TrialHandler"
      conditionsFile = $ir_test_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      LoopInitiator image_test_repeat loopType="TrialHandler"
        loopType = random
        nReps = 50
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        Routine ir_test_trial
        Routine pause
      LoopTerminator image_test_repeat
    LoopTerminator ir_test_loop
    Routine ar_test_instruction
    LoopInitiator ar_test_loop loopType="TrialHandler"
      conditionsFile = $ar_test_conds_file
      loopType = random
      nReps = 1
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      Routine isi_fixation_cross
      Routine set_color_ar
      LoopInitiator image_reps loopType="TrialHandler"
        loopType = random
        nReps = 50
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        Routine key_response_routine
        Routine pause
        Routine sound_routine
      LoopTerminator image_reps
    LoopTerminator ar_test_loop
  LoopTerminator n_shot_block_loop
